PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instr_general
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    TextComponent text_instr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Look at the center arrow.
        Press Left (F) if it points Left.
        Press Right (J) if it points Right.
        Ignore the side arrows.
        Be fast and accurate.

        Press Space to start.
    KeyboardComponent key_wait
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_fixation
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    TextComponent fixation_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = norm
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  Routine trial_stimulus
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    TextComponent arrow_array
      color = black
      font = Courier New
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = $stim_text
      units = norm
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    KeyboardComponent resp_keys
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine trial_feedback
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    TextComponent feedback_text
      color = green
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Correct!
      units = norm
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  Routine trial_iti
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    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine instr_main
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    TextComponent text_warning
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        The real experiment begins now.
        No feedback will be given.
        Focus on speed and accuracy.

        Press Space to continue.
    KeyboardComponent key_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_fixation
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    TextComponent fix_cross
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = norm
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  Routine main_stimulus
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    TextComponent target_array
      color = black
      font = Courier New
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = $stim_text
      units = norm
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    KeyboardComponent main_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine main_iti
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    TextComponent blank_iti
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine break_screen_1
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    TextComponent break_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Take a short break.
        Press Space to continue.
    KeyboardComponent break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_fixation_b2
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    TextComponent fix_cross_b2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = norm
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  Routine main_stimulus_b2
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    TextComponent target_array_b2
      color = black
      font = Courier New
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = $stim_text
      units = norm
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    KeyboardComponent main_resp_b2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine main_iti_b2
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    TextComponent blank_iti_b2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine end_screen
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    TextComponent text_end
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Experiment Complete.
        Thank you for your participation.
    KeyboardComponent key_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr_general
  LoopInitiator loop_practice loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine trial_fixation
    Routine trial_stimulus
    Routine trial_feedback
    Routine trial_iti
  LoopTerminator loop_practice
  Routine instr_main
  LoopInitiator loop_main_block1 loopType="TrialHandler"
    loopType = fullRandom
    nReps = 1
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    Routine main_fixation
    Routine main_stimulus
    Routine main_iti
  LoopTerminator loop_main_block1
  Routine break_screen_1
  LoopInitiator loop_main_block2 loopType="TrialHandler"
    loopType = fullRandom
    nReps = 1
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    Routine main_fixation_b2
    Routine main_stimulus_b2
    Routine main_iti_b2
  LoopTerminator loop_main_block2
  Routine end_screen
