PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  End Message = Thank you for your participation.
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = deeppsych_exp
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine intro
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    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome to the Reaction Time Study.

        In this experiment, you will see a fixation cross followed by a green circle.

        Your task is to press the SPACEBAR as quickly as possible when the green circle appears.

        Focus on the center of the screen. Speed is important, but try to avoid guessing before the circle appears.

        Press SPACEBAR to begin the practice session.
    KeyboardComponent intro_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent fixation_cross
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
      units = norm
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  Routine target
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    ImageComponent green_circle
      image [set every repeat] = green_circle.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      size = (0.1, 0.1)
      units = norm
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    KeyboardComponent practice_key_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine feedback_routine
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    TextComponent feedback_text
      color = black
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = $feedback_message
      units = norm
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  Routine iti
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    TextComponent blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine main_instruction
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    TextComponent main_instr_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Practice Complete.

        The main experiment is about to begin.

        Remember: Press SPACEBAR as fast as you can when the green circle appears.

        No feedback will be shown during this section.

        Press SPACEBAR to start.
    KeyboardComponent main_start_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_fixation
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    TextComponent main_fixation_cross
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
      units = norm
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  Routine main_target
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    ImageComponent main_green_circle
      image [set every repeat] = green_circle.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      size = (0.1, 0.1)
      units = norm
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    KeyboardComponent main_key_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine main_iti
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    TextComponent main_blank_screen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine debrief
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    TextComponent thank_you_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Thank you for participating!

        This study measured your simple motor-visual processing speed.

        Your average reaction time and accuracy have been recorded.

        Press SPACEBAR to close the experiment.
    KeyboardComponent end_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine fixation
    Routine target
    Routine feedback_routine
    Routine iti
  LoopTerminator practice_loop
  Routine main_instruction
  LoopInitiator main_loop loopType="TrialHandler"
    loopType = random
    nReps = 40
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    Routine main_fixation
    Routine main_target
    Routine main_iti
  LoopTerminator main_loop
  Routine debrief
